PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = stroop test
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instruction
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    TextComponent instruction_text
      font = SimHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加实验

        实验说明
        当你看见红色按左，绿色按下，蓝色按右。
        如果你准备好了，按任意键开始练习实验。
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent color_stim
      color [set every repeat] = $text_color
      font = SimHei
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $text_word
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    KeyboardComponent color_response
      allowedKeys = 'left','right','down'
      correctAns = $corr_Ans
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      storeCorrect = True
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine fb
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if color_response.corr == 1:
            feedback_text = '对啦！'
        else:
            feedback_text = '错咯~'
    TextComponent fb_text
      font = SimHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine last
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    TextComponent last_words
      font = SimHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 感谢您的参与！
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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Flow
  Routine instruction
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = stroop stimulus.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'text_word': '红', 'text_color': 'red', 'corr_Ans': 'left'},
      {'text_word': '红', 'text_color': 'green', 'corr_Ans': 'down'},
      {'text_word': '红', 'text_color': 'blue', 'corr_Ans': 'right'},
      {'text_word': '绿', 'text_color': 'red', 'corr_Ans': 'left'},
      {'text_word': '绿', 'text_color': 'green', 'corr_Ans': 'down'},
      {'text_word': '绿', 'text_color': 'blue', 'corr_Ans': 'right'},
      {'text_word': '蓝', 'text_color': 'red', 'corr_Ans': 'left'},
      {'text_word': '蓝', 'text_color': 'green', 'corr_Ans': 'down'},
      {'text_word': '蓝', 'text_color': 'blue', 'corr_Ans': 'right'}]
    Routine trial
    Routine fb
  LoopTerminator trials_loop
  Routine last
