PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop test
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instruction
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    TextComponent instructiontext
      font = SimHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        红向左，
        绿向下，
        蓝向右。

        按任意键开始。
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine experiment_trial
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    TextComponent experimenttext
      color [set every repeat] = $colour
      font = SimHei
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text [set every repeat] = $word
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'left','right','down'
      correctAns = $correctanswer
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      storeCorrect = True
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/fafaya/Desktop/stroop/stroop.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'word': '红', 'colour': 'red', 'congruent': 1, 'correctanswer': 'left'},
      {'word': '红', 'colour': 'green', 'congruent': 0, 'correctanswer': 'down'},
      {'word': '绿', 'colour': 'green', 'congruent': 1, 'correctanswer': 'down'},
      {'word': '绿', 'colour': 'blue', 'congruent': 0, 'correctanswer': 'right'},
      {'word': '蓝', 'colour': 'blue', 'congruent': 1, 'correctanswer': 'right'},
      {'word': '蓝', 'colour': 'red', 'congruent': 0, 'correctanswer': 'left'}]
    Routine experiment_trial
  LoopTerminator trials
